PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [800, 600]
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine rsvp
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    CodeComponent rsvp_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random




        STREAM_LEN = 15


        letters = [chr(x) for x in range(65,91) if chr(x) not in ['I','O']]


        stream_items = []
        current_item_index = 0
        stream_item_to_show = ''
        T1_actual = ''
        T2_actual = ''
      Begin Routine:
        T1_actual = str(random.randint(1, 9))
        T2_actual = str(random.randint(1, 9))

        stream_items = [random.choice(letters) for _ in range(STREAM_LEN)]

        T1_pos_idx = int(T1_pos) - 1
        T2_pos_idx = int(T2_pos) - 1

        stream_items[T1_pos_idx] = T1_actual
        stream_items[T2_pos_idx] = T2_actual


        current_item_index = 0
        frame_duration = 0.1
        stream_item_to_show = ''
      Each Frame:
        if current_item_index < STREAM_LEN:

            if t >= current_item_index * frame_duration:


                stream_item_to_show = stream_items[current_item_index]


                current_item_index += 1

        else:

            continueRoutine = False
      End Routine:
        trials.addData('T1_target', T1_actual)
        trials.addData('T2_target', T2_actual)
    TextComponent stream_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $stream_item_to_show
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  Routine response
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = "Which two digits did you see? Press SUBMIT after your response"
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    TextboxComponent textbox1
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = First Number
      pos = (-0.3, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 1.2
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    TextboxComponent textbox2
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Second Number
      pos = (0.3, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 1.2
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0,- 0.35)
      size = (0.25, 0.08)
      startVal [time (s)] = 1.3
      text = Submit
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  Routine instructions
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS
        You will see a rapid stream of letters.
        Two digits will appear somewhere in the stream.

        Your task:
        1. Watch the stream carefully.
        2. Type the two digits you saw into the text boxes.
        3. Press the Submit button to continue.

        The stream is very fast, do your best and guess if you are unsure.

        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        THANK YOU!

        You have completed the experiment.
        Thank you for your time and participation.

        Press SPACE to exit.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = rsvp_conditions.csv
    loopType = sequential
    nReps = 20
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('lag', np.int64(2)), ('T1_pos', np.int64(4)), ('T2_pos', np.int64(6))]),
      OrderedDict([('trial', np.int64(2)), ('lag', np.int64(3)), ('T1_pos', np.int64(4)), ('T2_pos', np.int64(7))]),
      OrderedDict([('trial', np.int64(3)), ('lag', np.int64(5)), ('T1_pos', np.int64(4)), ('T2_pos', np.int64(9))]),
      OrderedDict([('trial', np.int64(4)), ('lag', np.int64(8)), ('T1_pos', np.int64(4)), ('T2_pos', np.int64(12))]),
      OrderedDict([('trial', np.int64(5)), ('lag', np.int64(2)), ('T1_pos', np.int64(5)), ('T2_pos', np.int64(7))]),
      OrderedDict([('trial', np.int64(6)), ('lag', np.int64(3)), ('T1_pos', np.int64(5)), ('T2_pos', np.int64(8))]),
      OrderedDict([('trial', np.int64(7)), ('lag', np.int64(5)), ('T1_pos', np.int64(5)), ('T2_pos', np.int64(10))]),
      OrderedDict([('trial', np.int64(8)), ('lag', np.int64(8)), ('T1_pos', np.int64(5)), ('T2_pos', np.int64(13))])]
    Routine trial
    Routine rsvp
    Routine response
  LoopTerminator trials
  Routine thank_you
